PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 800]
  expName = new_grating_pattern_glare
  logging level = debug
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Routines
  Routine experiment_setup
    CodeComponent code_setup
      Code Type = Py
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      Before Experiment:
        ### START SET EXPERIMENT CONSTANTS ###
        # (all sizes/coordinates are in degrees)
        # diameter of grating stimulus
        GRATING_DIAMETER = 13.77
        # y coordinate of grating stimulus midpoint
        GRATING_MIDPOINT_Y = 0
        # diameter of grating center small circle
        SMALL_CIRCLE_DIAMETER = 0.2/13.77 * GRATING_DIAMETER
        # duration for which stimulus should be shown
        SHOW_DUR = 5

        # mouse start position coordinates
        # (eg '(0, 0)' means that the mouse cursor is
        # moved to the center of the screen at beginning
        # of every question routine
        MOUSE_START_POS = (0, 0)


        # text regular size
        TXT_SIZE = 1.2
        # text wrap width
        TXT_WRAP_WIDTH = 20

        # confirmation button y coordinate
        CONFIRM_Y = -8

        # confirmation button width
        CONFIRM_BTN_WIDTH = 4
        CONFIRM_BTN_HEIGHT = 2
        # confirmation text height
        CONFIRM_TXT_HEIGHT = CONFIRM_BTN_HEIGHT * 0.5

        # question y coordinate
        Q_Y = 6

        # opacity of neutral/selected ('highlighted') response choices
        RESP_NEUTRAL_OPACITY = 0.9
        RESP_SELECTED_OPACITY = 1

        ## BEGIN COLOR SECTION ##
        # first response choice y coordinate
        COLOR_RESP_Y = 4
        # response choice font size
        COLOR_RESP_TXT_SIZE = TXT_SIZE * 0.8
        # y axis margin between response choices
        COLOR_RESP_MARGIN = COLOR_RESP_TXT_SIZE * 1.2

        ## END COLOR SECTION ##

        ## BEGIN DISCOMFORT SECTION ##


        # width of participant response slider
        SLIDER_WIDTH = 24
        SLIDER_HEIGHT = 1.5

        # slider y coordinate
        SLIDER_Y = -1

        ## END DISCOMFORT SECTION ##

        ## BEGIN DISCOMFORT SECTION ##
        # question text y coordinate
        Q_DISCOMFORT_Y = 5

        # width of participant response slider
        SLIDER_WIDTH = 24
        SLIDER_HEIGHT = 1.5

        # slider y coordinate
        SLIDER_Y = -1

        ## END DISCOMFORT SECTION ##


        ### END SET EXPERIMENT CONSTANTS ###
    CodeComponent code_translation
      Code Type = Py
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      Begin Experiment:
        ### START TRANSLATION ###
        # "which type(s) of experiences did you
        # have while looking at the pattern?"
        Q_EXPERIENCES_TXT = """
        Vilken/vilka typ(er) av upplevelser fick du när du tittade på mönstret?
        """
        # dictionary of response options
        # ("colors, bending of lines,
        # blurring of lines, shimmer/flicker,
        # fading, shadowy shapes,
        # other/specify")
        Q_EXPERIENCES_DICT = {
            'colors': 'färg (annan/andra än svart och vit)',
            'bend_lines': 'linjer böjdes',
            'blur_lines': 'linjer blev suddiga',
            'flicker': 'skimmer/flimmer',
            'fading': 'hela eller del av mönstret tonade/bleknade bort',
            'shadowy': 'skuggiga former',
            'other': 'annat, beskriv:'
        }

        # 'which, if any, color(s) did you experience while
        # looking at the pattern?'
        Q_COLOR_TXT = """
        Vilka färger upplevde du när du tittade på mönstret?
        """
        # dictionary of response color names
        Q_COLORS_DICT = {
            'yellow': 'gul',
            'red': 'röd',
            'green': 'grön',
            'blue': 'blå',
            'purple': 'lila',
            'pink': 'rosa',
            'brown': 'brun',
            'orange': 'orange'
        }

        # "How (un)comfortable did you find the
        # pattern?"
        Q_DISCOMFORT_TXT = """
        Hur (o)behagligt upplevde du mönstret?
        """

        # confirmation button text
        # 'Confirm'
        CONFIRM_TXT = 'Bekräfta'

        ### END TRANSLATION ###
  Routine trial_show_pattern
    GratingComponent grating_trial
      color = $[-1,-1,-1]
      mask = circle
      ori = 90
      phase [set every repeat] = 0
      pos = (0, GRATING_MIDPOINT_Y)
      saveStartStop = False
      sf [set every repeat] = 0.27
      size = (GRATING_DIAMETER, GRATING_DIAMETER)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $SHOW_DUR
      tex = sqr
      texture resolution = 512
      units = deg
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    CodeComponent code_trial
      Code Type = Py
      Begin Experiment:
        # changing the pattern texture resolution 'manually' because
        # the highest resolution by default in the PsychoPy Builder View
        # is 512
        grating_trial.texRes = 2048

        # form lists of stimuli specifications
        # grating phase
        grating_phases = [0, 0.5, 0.5]
        # grating spatial frequency
        grating_sfs = [0.27, 3, 11]

        # start trial counter, for stepping through stimuli
        # specifications
        trial_counter = 0
      Begin Routine:
        grating_trial.phase = grating_phases[trial_counter]

        grating_trial.sf = grating_sfs[trial_counter]

        # hide the mouse cursor
        win.mouseVisible = False
      End Routine:
        trials.addData('grating_spatial_frequency', grating_trial.sf)
        trials.addData('grating_phase', grating_trial.phase)
    PolygonComponent line_trial
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      ori = 90
      pos = (0, GRATING_MIDPOINT_Y)
      saveStartStop = False
      shape = line
      size = (GRATING_DIAMETER, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $SHOW_DUR
      units = deg
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    PolygonComponent circle_trial_mid
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 120
      pos = (0, GRATING_MIDPOINT_Y)
      saveStartStop = False
      shape = regular polygon...
      size = (SMALL_CIRCLE_DIAMETER, SMALL_CIRCLE_DIAMETER)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $SHOW_DUR
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  Routine trial_q_discomfort
    CodeComponent code_discomfort
      Code Type = Py
      Begin Routine:
        # move the mouse cursor to the starting position
        mouse_discomfort.setPos(MOUSE_START_POS)

        mouse_discomfort.status == STARTED
        buttons = []
      Each Frame:
        this_frame_buttons = mouse_discomfort.getPressed()

        # at least one button has been clicked, and it's a new click
        if sum(this_frame_buttons) > 0 and this_frame_buttons != prev_frame_buttons:
            # check if the mouse was inside our 'clickable' object
            if rectangle_discomfort_confirm.contains(mouse_discomfort) and slider_discomfort.getRating() is not None:
                continueRoutine = False
                gotValidClick = True
                confirm_click_time = tThisFlip

        # store this frame's buttons for comparison in next frame
        prev_frame_buttons = this_frame_buttons
      End Routine:
        trials.addData('discomfort_confirm_click_time', confirm_click_time)

        trial_counter += 1
    MouseComponent mouse_discomfort
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    SliderComponent slider_discomfort
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = ('Extremt obehagligt','','','','','','','','','', 'Extremt behagligt')
      pos = (0, SLIDER_Y)
      saveStartStop = False
      size = (SLIDER_WIDTH, SLIDER_HEIGHT)
      startVal [time (s)] = 0.0
      styles = ('rating',)
      ticks = (-5, -4, -3, -2, -1, 0, 1, 2, 3, 4, 5)
      units = deg
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    PolygonComponent rectangle_discomfort_confirm
      fillColor = $[1,1,1]
      pos = (0, CONFIRM_Y)
      saveStartStop = False
      shape = rectangle
      size = (CONFIRM_BTN_WIDTH, CONFIRM_BTN_HEIGHT)
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent text_discomfort_confirm
      color = black
      letterHeight = CONFIRM_TXT_HEIGHT
      pos = (0, CONFIRM_Y)
      startVal [time (s)] = 0.0
      text = $CONFIRM_TXT
      units = deg
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    TextComponent text_q_discomfort
      letterHeight = $TXT_SIZE
      pos = (0, Q_Y)
      startVal [time (s)] = 0.0
      text = $Q_DISCOMFORT_TXT
      wrapWidth = $TXT_WRAP_WIDTH
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  Routine trial_q_color
    CodeComponent code_color
      Code Type = Py
      Before Experiment:
        # import necessary for forming ordered dictionary
        # of color(key)-textstim(value) mappings
        from collections import OrderedDict
      Begin Experiment:
        # order of response alternatives
        color_order = [
            'yellow',
            'red',
            'green',
            'blue',
            'purple',
            'pink',
            'brown',
            'orange'
        ]

        # color(key)-textstim(value) dictionary
        color_resp_dict = OrderedDict()

        # fill up the dictionary with appropriate mappings
        for i, color in enumerate(color_order):
            resp_stim = visual.TextStim(
                win=win,
                name=f'color_{color}',
                text=Q_COLORS_DICT[color],
                font='Arial',
                units='deg',
                pos=(0, COLOR_RESP_Y - i * COLOR_RESP_MARGIN),
                height=COLOR_RESP_TXT_SIZE,
                wrapWidth=TXT_WRAP_WIDTH,
                ori=0,
                color='white',
                colorSpace='rgb',
                opacity=RESP_NEUTRAL_OPACITY,
                languageStyle='LTR',
                depth=-5.0
            )
            color_resp_dict[color] = resp_stim
      Begin Routine:
        # move the mouse cursor to the starting position
        mouse_color.setPos(MOUSE_START_POS)

        mouse_color.status == STARTED
        # list of clicked buttons in current frame
        this_frame_buttons = []
        # list of buttons clicked on the last frame
        prev_frame_buttons = []

        # list of (in English) colors that have been
        # selected by the participant
        answer_colors = []

        # reset font and opacity of response color textstims
        for resp_stim in color_resp_dict.values():
            resp_stim.font = 'Arial'
            resp_stim.opacity = RESP_NEUTRAL_OPACITY
      Each Frame:
        this_frame_buttons = mouse_discomfort.getPressed()

        # at least one button has been clicked, and it's a new click
        if sum(this_frame_buttons) > 0 and this_frame_buttons != prev_frame_buttons:
            # check if one of the response alternatives was clicked
            for resp_key in color_resp_dict:
                if color_resp_dict[resp_key].contains(mouse_color):
                    # if response is already selected
                    if resp_key in answer_colors:
                        color_resp_dict[resp_key].opacity = RESP_NEUTRAL_OPACITY
                        color_resp_dict[resp_key].font = 'Arial'
                        answer_colors.remove(resp_key)
                    # if response isn't selected
                    else:
                        # change the font to indicate that response
                        # has been selected
                        color_resp_dict[resp_key].opacity = RESP_SELECTED_OPACITY
                        color_resp_dict[resp_key].font = 'Arial Black'
                        answer_colors.append(resp_key)
            # check if 'confirm' button was clicked
            if rectangle_color_confirm.contains(mouse_color):
                continueRoutine = False
                gotValidClick = True
                confirm_click_time = tThisFlip

        # store this frame's buttons for comparison in next frame
        prev_frame_buttons = this_frame_buttons

        # draw the response choices
        for resp_key in color_resp_dict:
            color_resp_dict[resp_key].draw()
      End Routine:
        trials.addData('color_confirm_click_time', confirm_click_time)
        trials.addData('experienced_colors', answer_colors)
    MouseComponent mouse_color
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_color_confirm
      fillColor = $[1,1,1]
      pos = (0, CONFIRM_Y)
      saveStartStop = False
      shape = rectangle
      size = (CONFIRM_BTN_WIDTH, CONFIRM_BTN_HEIGHT)
      startVal [time (s)] = 0.0
      units = deg
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    TextComponent text_color_confirm
      color = black
      letterHeight = CONFIRM_TXT_HEIGHT
      pos = (0, CONFIRM_Y)
      startVal [time (s)] = 0.0
      text = $CONFIRM_TXT
      units = deg
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    TextComponent text_q_color
      letterHeight = $TXT_SIZE
      pos = (0, Q_Y)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $Q_COLOR_TXT
      wrapWidth = $TXT_WRAP_WIDTH
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Flow
  Routine experiment_setup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator SKIPIT loopType="TrialHandler"
      loopType = random
      nReps = 0
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      Routine trial_show_pattern
    LoopTerminator SKIPIT
    Routine trial_q_color
    Routine trial_q_discomfort
  LoopTerminator trials
